PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = black
  expName = EDT
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine intro
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    ImageComponent image
      image = material/Intro/Intro/幻灯片1.PNG
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_intro
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    ImageComponent image_2
      image = material/Intro/Intro/幻灯片2.PNG
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixed
    RoutineSettingsComponent fixed
      stopVal [duration (s)] = 0.5
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    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine formal_intro
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    ImageComponent image_3
      image = material/Intro/Intro/幻灯片6.PNG
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prac_intro_2
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  Routine prac_end
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    ImageComponent image_5
      image = material/Intro/Intro/幻灯片4.PNG
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent image_7
      image [set every repeat] = $stim1
      pos = (-0.4, 0)
      size = (0.25, 0.2285)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    ImageComponent image_8
      image [set every repeat] = $stim2
      pos = (0.4, 0)
      size = (0.25, 0.2285)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import random
      Begin Routine:
        positions = [(-0.2, 0), (0.2, 0)]

        image_7.pos = positions[0]
        image_8.pos = positions[1]
      End Routine:
        var1 = positions[0]
    VariableComponent var1
      saveEndExp = True
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  Routine emotion
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $stimuli
      size = (1024, 768)
      startVal [time (s)] = 0.0
      units = pix
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  Routine blank
    RoutineSettingsComponent blank
      stopVal [duration (s)] = 0.5
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  Routine intro_again
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  Routine End
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    ImageComponent image_6
      image = material/Intro/Intro/幻灯片7.PNG
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro
  Routine prac_intro
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'no': 'p1', 'stim1': 'material/L2.png', 'stim2': 'material/W2.png'},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None}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
    Routine fixed
    Routine response
  LoopTerminator trials
  Routine prac_end
  Routine intro_again
  Routine formal_intro
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 0:16
    conditionsFile = stimuli.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'no': 1, 'stim1': 'material/L0.png', 'stim2': 'material/W0.png'},
      {'no': 2, 'stim1': 'material/L0.png', 'stim2': 'material/W1.png'},
      {'no': 3, 'stim1': 'material/L0.png', 'stim2': 'material/W2.png'},
      {'no': 4, 'stim1': 'material/L0.png', 'stim2': 'material/W3.png'},
      {'no': 5, 'stim1': 'material/L1.png', 'stim2': 'material/W0.png'},
      {'no': 6, 'stim1': 'material/L1.png', 'stim2': 'material/W1.png'},
      {'no': 7, 'stim1': 'material/L1.png', 'stim2': 'material/W2.png'},
      {'no': 8, 'stim1': 'material/L1.png', 'stim2': 'material/W3.png'},
      {'no': 9, 'stim1': 'material/L2.png', 'stim2': 'material/W0.png'},
      {'no': 10, 'stim1': 'material/L2.png', 'stim2': 'material/W1.png'},
      {'no': 11, 'stim1': 'material/L2.png', 'stim2': 'material/W2.png'},
      {'no': 12, 'stim1': 'material/L2.png', 'stim2': 'material/W3.png'},
      {'no': 13, 'stim1': 'material/L3.png', 'stim2': 'material/W0.png'},
      {'no': 14, 'stim1': 'material/L3.png', 'stim2': 'material/W1.png'},
      {'no': 15, 'stim1': 'material/L3.png', 'stim2': 'material/W2.png'},
      {'no': 16, 'stim1': 'material/L3.png', 'stim2': 'material/W3.png'},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None},
      {'no': None, 'stim1': None, 'stim2': None}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
    Routine fixed
    Routine response
  LoopTerminator trials_2
  Routine End
